/**
 * @file ConfigParser.hoc
 * @brief The ConfigParser will handle reading BlueConfig files and make the information available
 * @brief to other modules.  Whether the data read from the file should be stored in objects defined
 * @brief in other files may be revised later.  For now, store everything in generic "map" class built
 * @brief from basic implementation
 * @author king
 * @date 2009-06-24
 * @remark Copyright © BBP/EPFL 2005-2011; All rights reserved. Do not distribute without further notice.
 */

{load_file("nrngui.hoc")}
{load_file("Map.hoc")}

//------------------------------------------------------------------------------------------------------------
//------------------------------------------------------------------------------------------------------------
//------------------------------------------------------------------------------------------------------------

/*!
 * For a simple quick version, just have "map" objects that link up to reports, stims, etc.  These in turn
 * contain maps for the actual contents of a given block
 */
begintemplate ConfigParser
    //TODO: make a better encapsulated version

//------------------------------------------------------------------------------------------------------------
// Member fields
//------------------------------------------------------------------------------------------------------------

objref parsedRun, parsedReports, parsedStimuli, parsedInjects, parsedConnects, parsedElectrodes, \
    parsedConfigures, parsedModifications, parsedProjections, strUtil

//------------------------------------------------------------------------------------------------------------
// Public accessible
//------------------------------------------------------------------------------------------------------------

public init, open, toggleVerbose
public parsedRun, parsedReports, parsedStimuli, parsedInjects, parsedConnects, parsedElectrodes, \
    parsedConfigures, parsedModifications, parsedProjections

//------------------------------------------------------------------------------------------------------------
// Member function implementations
//------------------------------------------------------------------------------------------------------------

proc init() {
    strUtil = new StringFunctions()
    
    // note that since there should only be one Run object, we create nothing now.
    parsedReports = new Map()
    parsedStimuli = new Map()
    parsedInjects = new Map()
    parsedConnects = new Map()
    parsedElectrodes = new Map()
    parsedConfigures = new Map()
    parsedModifications = new Map()
    parsedProjections = new Map()
}

//------------------------------------------------------------------------------------------------------------

/*!
 * Read the specified Config File, populating basic maps with the data read for now.
 *
 * @param $s1 Name of file to open and parse
 */
proc open() { local commentCheck  localobj configIn, rawline, strtemp, sectionName, sectionType, tempBlock
    
    configIn = new File()
    configIn.ropen( $s1 )
    
    if( configIn.isopen == 0 ) {
        printf( "Error: Could not open BlueConfig file '%s'\n", $s1 )
        quit()
    }
    
    //read line by line, branch off when encountering major block type: run, stimulus, report, stimulusinject, connect
    rawline = new String()
    strtemp = new String()
    sectionType = new String()
    sectionName = new String()
    
    while( configIn.gets(rawline.s) >= 0 ) {
        trimFront( rawline.s )
        if( strcmp( rawline.s, "\n" ) == 0 ) {
        
        } else if( isCommented( rawline.s ) ) {
        } else {
            //non-comment line, there should be a name along with the yet to be determined section type
            sectionType.s = ""
            sscanf( rawline.s, "%s%s", sectionType.s, sectionName.s )
            
            //next line is open brace, so grab it now
            configIn.gets(strtemp.s)
            
            if( strcmp( sectionType.s, "Run" ) == 0 ) {
                parseRun( configIn )
            } else {
                tempBlock = parseBlock( configIn )
                if ( strcmp( sectionType.s, "Report" ) == 0 ) {
                    parsedReports.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "Stimulus" ) == 0 ) {
                    parsedStimuli.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "StimulusInject" ) == 0 ) {
                    parsedInjects.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "Connection" ) == 0 ) {
                    parsedConnects.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "Electrode" ) == 0 ){
            	    parsedElectrodes.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "NeuronConfigure" ) == 0 ){
            	    parsedConfigures.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "Modification" ) == 0 ) {
                    parsedModifications.put( sectionName, tempBlock )
                } else if ( strcmp( sectionType.s, "Projection" ) == 0 ) {
                    parsedProjections.put( sectionName, tempBlock )
                }
            }
        }
    }
    
    configIn.close
}

//------------------------------------------------------------------------------------------------------------

/*!
 * @param $o1 configIn
 */
proc parseRun() { localobj rawline, configIn, fieldName, fieldValue

    //user is only allowed to declare one Run section in the config file
    if( object_id(parsedRun) != 0 )  {
        printf( "Error: multiple Run objects declared in config file\n" )
        quit()
    }
    
    rawline = new String()
    configIn = $o1
    
    parsedRun = new Map()
    
    while( configIn.gets(rawline.s) >= 0 ) {
        //check if close brace to terminate section
        if( isTerminated( rawline.s ) ) {
            return
        }
    
        if( !isCommented( rawline.s )) {
            //we only expect string pairs for run objects, so keep it simple for now
            fieldName = new String()
            fieldValue = new String()

            sscanf( rawline.s, "%s%s", fieldName.s, fieldValue.s )
            
            parsedRun.put( fieldName, fieldValue )
        }
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * Generic method for parsing the field/value pairs bwteen the opening/closing braces in the config file
 *
 * @param $o1 File getting parsed
 */
obfunc parseBlock() { local ret  localobj pendingBlock, rawline, configIn, fieldName, fieldValue
    strdef wscheck
    
    rawline = new String()
    configIn = $o1
    
    pendingBlock = new Map()
    
    while( configIn.gets(rawline.s) >= 0 ) {
        //ignore empty lines
        trimFront(rawline.s)
        if( strcmp(rawline.s, "\n") == 0 ) {
            continue
        }
    
        //check if close brace to terminate section
        if( isTerminated( rawline.s ) ) {
            return pendingBlock
        }
        
        if( !isCommented( rawline.s )) {
            
            //just grab the first string, then everything after that string
            fieldName = new String()
            fieldValue = new String()
            
            sscanf( rawline.s, "%s", fieldName.s )
            
            strUtil.tail( rawline.s, fieldName.s, fieldValue.s )
            
            //check for leading and trailing white space in fieldValue
            wscheck = fieldValue.s
            strUtil.left( wscheck, 1 )
            if( strcmp( wscheck, " " ) == 0 || strcmp( wscheck, "\t" ) == 0 ) {
                ret = strUtil.tail( fieldValue.s, "[ \t]+", fieldValue.s ) //strip leading white space
            }
            
            wscheck = fieldValue.s
            strUtil.right( wscheck, strUtil.len(wscheck)-1 )
            while( strcmp( wscheck, " " ) == 0 || strcmp( wscheck, "\t" ) == 0 || strcmp( wscheck, "\n" ) == 0 ) {
                strUtil.left( fieldValue.s, strUtil.len(fieldValue.s)-1 )
                wscheck = fieldValue.s
                strUtil.right( wscheck, strUtil.len(wscheck)-1 )
            }
            
            //add  to the map
            pendingBlock.put( fieldName, fieldValue )
        }
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * deprecated - used to get report info, now should use parseBlock
 * @param $o1 File getting parsed
 * @param $o2 Stimulus name - String containing the name
 */
proc parseReport() { localobj pendingReport, rawline, configIn, fieldName, fieldValue

    rawline = new String()
    configIn = $o1
    
    pendingReport = new Map()
    
    while( configIn.gets(rawline.s) >= 0 ) {
    
        //check if close brace to terminate section
        if( isTerminated( rawline.s ) ) {
            parsedReports.put( $o2, pendingReport )
            return
        }
    
        if( !isCommented( rawline.s )) {
            
            //we only expect string pairs for stimulus objects, so keep it simple for now
            fieldName = new String()
            fieldValue = new String()

            sscanf( rawline.s, "%s%s", fieldName.s, fieldValue.s )
            
            pendingReport.put( fieldName, fieldValue )
        }
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * deprecated - used to get stimulus info, now should use parseBlock
 * @param $o1 File getting parsed
 * @param $o2 Stimulus name - String containing the name
 */
proc parseStimulus() { localobj pendingStim, rawline, configIn, fieldName, fieldValue

    rawline = new String()
    configIn = $o1
    
    pendingStim = new Map()
    
    while( configIn.gets(rawline.s) >= 0 ) {
    
        //check if close brace to terminate section
        if( isTerminated( rawline.s ) ) {
            parsedStimuli.put( $o2, pendingStim )
            return
        }
    
        if( !isCommented( rawline.s )) {
            
            //we only expect string pairs for stimulus objects, so keep it simple for now
            fieldName = new String()
            fieldValue = new String()

            sscanf( rawline.s, "%s%s", fieldName.s, fieldValue.s )
            
            pendingStim.put( fieldName, fieldValue )
        }
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * deprecated - used to get inject info, now should use parseBlock
 * @param $o1 File getting parsed
 * @param $o2 Stimulus Inject name - String containing the name
 */
proc parseStimulusInject() { localobj pendingInject, rawline, configIn, fieldName, fieldValue

    rawline = new String()
    configIn = $o1
    
    pendingInject = new Map()
    
    while( configIn.gets(rawline.s) >= 0 ) {
    
        //check if close brace to terminate section
        if( isTerminated( rawline.s ) ) {
            parsedInjects.put( $o2, pendingInject )
            return
        }
    
        if( !isCommented( rawline.s )) {
            //we only expect string pairs for stimulus objects, so keep it simple for now
            fieldName = new String()
            fieldValue = new String()

            sscanf( rawline.s, "%s%s", fieldName.s, fieldValue.s )
            pendingInject.put( fieldName, fieldValue )
        }
    }
}

//------------------------------------------------------------------------------------------------------------

/**
 * Remove white space from start and end of a string
 * @param $s1 string to get trimmed
 */
proc trimFront() { local index
    strdef peek
    
    //confirm that first character is ws
    peek = $s1
    strUtil.left(peek, 1)
    index = strUtil.head( peek, "[ \t]", peek )
    while( index != -1 ) {
        strUtil.tail( $s1, "[ \t]", $s1 )
        
        peek = $s1
        strUtil.left(peek, 1)
        index = strUtil.head( peek, "[ \t]", peek )
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * @param $s1 Line to check for if it is commented or not
 * @return 1 if the line is commented (first non-ws character is a '#') or 0 if not commented
 */
func isCommented() {
    strdef temp
    
    sscanf( $s1, "%s", temp )
    
    //verify first non-ws charater is not '#'; otherwise, ignore whole line as comment
    if( strUtil.substr( temp, "#" ) != 0 ) {
        return 0
    } else {
        return 1
    }
    
}

//------------------------------------------------------------------------------------------------------------

/*!
 * @param $s1 Line to check for if terminating close brace is present
 * @return 1 if the line contains closing brace '}' to terminate section
 */
func isTerminated() {
    strdef temp
    
    sscanf( $s1, "%s", temp )
    
    if( strcmp( temp, "}" ) != 0 ) {
        return 0
    } else {
        return 1
    }
}

//------------------------------------------------------------------------------------------------------------

/*!
 * For all the maps stored in the ConfigParser, activate verbose logging so that any unexpected events are 
 * more descriptively printed to the console
 */
proc toggleVerbose() { local mapIndex, itemIndex  localobj mapList
    parsedRun.toggleVerbose()
    
    mapList = new List()
    mapList.append( parsedReports )
    mapList.append( parsedStimuli )
    mapList.append( parsedInjects )
    mapList.append( parsedConnects )
    mapList.append( parsedElectrodes )
    mapList.append( parsedConfigures )
    mapList.append( parsedModifications )
    mapList.append( parsedProjections )

    for mapIndex=0, mapList.count()-1 {
        mapList.o(mapIndex).toggleVerbose()
        for itemIndex=0, mapList.o(mapIndex).count()-1 {
            mapList.o(mapIndex).o(itemIndex).toggleVerbose()
        }
    }
}

endtemplate ConfigParser
